PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tTraceTest3
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialCursor.pos = (1.5,1.5)
        trialMouse.pos = (1.5,1.5)

        response1 = False
        response2 = True
        response3 = True
        responseA = True
        responseB = True
        responseC = True

        targetOpac1 = 0.3
        targetOpac2 = 0.3
        targetOpac3 = 0.3
        targetOpacA = 0.3
        targetOpacB = 0.3
        targetOpacC = 0.3

        trialStep = 1
        steps = []
      Each Frame:
        CursorTargetDistance1 = sqrt((trialCursor.pos[0]-trialTarget1.pos[0])**2 + (trialCursor.pos[1]-trialTarget1.pos[1])**2)
        CursorTargetDistance2 = sqrt((trialCursor.pos[0]-trialTarget2.pos[0])**2 + (trialCursor.pos[1]-trialTarget2.pos[1])**2)
        CursorTargetDistance3 = sqrt((trialCursor.pos[0]-trialTarget3.pos[0])**2 + (trialCursor.pos[1]-trialTarget3.pos[1])**2)
        CursorTargetDistanceA = sqrt((trialCursor.pos[0]-trialTargetA.pos[0])**2 + (trialCursor.pos[1]-trialTargetA.pos[1])**2)
        CursorTargetDistanceB = sqrt((trialCursor.pos[0]-trialTargetB.pos[0])**2 + (trialCursor.pos[1]-trialTargetB.pos[1])**2)
        CursorTargetDistanceC = sqrt((trialCursor.pos[0]-trialTargetC.pos[0])**2 + (trialCursor.pos[1]-trialTargetC.pos[1])**2)

        steps.append(trialStep)

        if not response1:
            trialStep = 1
            if (CursorTargetDistance1 < .05):
                targetOpac1 = 0
                response1 = True
                responseA = False
                print('Target get'+' ('+str(globalClock.getTime())+')')

        if not responseA:
            trialStep = 2
            if (CursorTargetDistanceA < .05):
                targetOpacA = 0
                responseA = True
                response2 = False
                print('Target get'+' ('+str(globalClock.getTime())+')')

        if not response2:
            trialStep = 3
            if (CursorTargetDistance2 < .05):
                targetOpac2 = 0
                response2 = True
                responseB = False
                print('Target get'+' ('+str(globalClock.getTime())+')')

        if not responseB:
            trialStep = 4
            if (CursorTargetDistanceB < .05):
                targetOpacB = 0
                responseB = True
                response3 = False
                print('Target get'+' ('+str(globalClock.getTime())+')')

        if not response3:
            trialStep = 5
            if (CursorTargetDistance3 < .05):
                targetOpac3 = 0
                response3 = True
                responseC = False
                print('Target get'+' ('+str(globalClock.getTime())+')')

        if not responseC:
            trialStep = 6
            if (CursorTargetDistanceC < .05):
                targetOpacC = 0
                responseC = True
                print('Target get'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False
      End Routine:
        thisExp.addData('step', steps)
    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget1
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac1
      pos [set every repeat] = (pos1, pos2)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget2
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac2
      pos [set every repeat] = (pos5, pos6)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget3
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac3
      pos [set every repeat] = (pos9, pos10)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetA
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacA
      pos [set every repeat] = (pos3, pos4)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetB
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacB
      pos [set every repeat] = (pos7, pos8)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetC
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacC
      pos [set every repeat] = (pos11, pos12)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialText1
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos1, pos2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent trialText2
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos5, pos6)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent trialText3
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos9, pos10)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent trialTextA
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos3, pos4)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent trialTextB
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos7, pos8)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent trialTextC
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos11, pos12)
      startVal [time (s)] = 0.0
      text = C
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    BrushComponent trialBrush
      lineWidth = 1.5
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('pos1', 0.3), ('pos2', 0.01), ('pos3', 0.18), ('pos4', 0.28), ('pos5', -0.28), ('pos6', -0.13), ('pos7', -0.4), ('pos8', -0.36), ('pos9', 0.31), ('pos10', -0.38), ('pos11', -0.01), ('pos12', 0.34)])]
    conditionsFile = tTraceCond1.xlsx
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
